PsychoPy2experiment version="1.84.2"
Settings
  Monitor = testMonitor
  Window size (pixels) = [1440, 960]
  Full-screen window = True
  Experiment info = {u'session': u'001', u'participant': u''}
  expName = psychopy_arduino_ha
  Units = use prefs
  Use version = 1.84.2
  Screen = 1
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Routines
  Routine tact_intro
    TextComponent text_3
      stopVal [duration (s)] = 1.0
      text = Please pay attention to the vibrations!
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine tactile_block
    TextComponent fixation
      stopVal [duration (s)] = 1.5
      text = +
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    CodeComponent call_arduino
      Begin Experiment:
        def motor_on(x):
            ser.write(x)
        i=1;
        i_str=str(i)
        i_encoded=i_str.encode('ascii')
      Begin Routine:
        #how to put delay here?
        #how to time it with other stimuli(visual/audio?)
        #how to incorporate it into a loop?
        motor_on(i_encoded)
    TextComponent force_choice
      text = please press which vibration was longer, with keys '1' or '2'
      startVal [time (s)] = 1.5
      letterHeight = 0.1
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    KeyboardComponent choice
      forceEndRoutine = True
      discard previous = False
      allowedKeys = '1','2'
      startVal [time (s)] = 1
      store = all keys
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  Routine Intro
    CodeComponent initialize_arduino
      Begin Experiment:
        import serial
        import time

        ser=serial.Serial('COM3',9600,timeout=1);
        time.sleep(2);
    TextComponent initializing
      stopVal [duration (s)] = 2
      text = Initializing experiment, please wait.
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent introduction
      text = Welcome, please press the space bar to continue when ready
      startVal [time (s)] = 2
      letterHeight = 0.1
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    KeyboardComponent start
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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Flow
  Routine Intro
  Routine tact_intro
  Routine tactile_block
