PsychoPy2experiment version="1.85.2"
Settings
  Monitor = testMonitor
  Experiment info = {'participant':'', 'session':'001'}
  Units = use prefs
  Window size (pixels) = (1024, 768)
  Full-screen window = True
  expName = blink_variable
  Screen = 1
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Routines
  Routine trial
    CodeComponent code
      Begin Experiment:
        import serial
        import time
        import numpy as np

        port = serial.Serial("/dev/cu.usbmodem000001", 9600)
        arr = [x for x in range(100,5000,300)]
        blank = '0,0,1000'
        blank_as_bytes = str.encode(blank)
        port.write(blank_as_bytes)
      Begin Routine:
        np.random.shuffle(arr)
        white, yellow = arr[0],arr[1]

        my_str = "{},{},100".format(white,yellow)
        my_str_as_bytes = str.encode(my_str)
        port.write(my_str_as_bytes)
      End Routine:
        port.write(blank_as_bytes)
      End Experiment:
        port.write(blank_as_bytes)
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      discard previous = False
      allowedKeys = 'left','right'
      startVal [time (s)] = 0.0
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    TextComponent text
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        wait for the flash

        yellow < or > white
  Routine feedback
    CodeComponent code_3
      Begin Routine:
        choice = key_resp_2.keys
        if key_resp_2.keys == 'left':
          choice = 'yellow'
        else:
          choice = 'white'
        choice_msg = 'yellow was {}, white was {},\n you chose {}\n\nPress space'.format(yellow,white,choice)
    TextComponent text_2
      text [set every repeat] = $choice_msg
      startVal [time (s)] = 0
      letterHeight = 0.1
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    KeyboardComponent key_resp_3
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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Flow
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 5
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    Routine trial
    Routine feedback
  LoopTerminator trials
